PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = e1
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        myWindow = visual.Window(fullscr=True)
        myBackground = visual.Polygon(win=myWindow, name="myBackground", edges=4, size=(5,5), pos=(0,0), fillColor=(1,1,1))


        #importing necessary libraries
        #from psychopy import visual

        #drawing the background of the study
        #myBackground = ShapeStim(psychoJS.window, size=(5,5), pos=(0,0), fillColor=(1,1,1)) makes the background white



        finStimDir= 'finalStim/' #tells psychopy where to find images

        #starting positions for the ball
        participantBallRightPos = (.05,-0.5)
        participantBallLeftPos = (-.05, -0.5)
        playerOneBallPos = (-.45, .50)
        playerTwoBallPos = (.45, .50)

        #Setting up conditions
        #Character set 1
        AcharacterOne = "CharacterA1.png"
        AcharacterTwo = "CharacterA2.png"
        AcharacterThree = "CharacterA3.png"
        Apuzzlecharacter ="CharacterA1Puzzle.png"
        #Character set 2
        BcharacterOne ="CharacterB1.png"
        BcharacterTwo = "CharacterB2.png"
        BcharacterThree = "CharacterB3.png"
        Bpuzzlecharacter = "CharacterB1Puzzle.png"
        #ball to use for games
        ball = visual.ImageStim(myWindow, pos= participantBallRightPos, size=(.13,.13), image=finStimDir + 'ball.png')

        #using experimental ID to set up the condition
        #setThrow options
        throwResp = ['left', 'right']


        expCond = expInfo['participant'][0]
        if expCond == "A" or expCond == "B" or expCond == "C" or expCond == "D" or expCond == "E" or expCond == "F" or expCond == "G" or expCond == "H":
            #first game participant
            Participant = AcharacterThree
            #first game left_side
            PlayerOne = AcharacterTwo
            PlayerOnePuzzle = Apuzzlecharacter
            #first game right_side
            PlayerTwo = AcharacterOne
            #second game participant
            ParticipantTwo =  BcharacterThree
            #second game left_side
            PlayerOneTwo = BcharacterTwo
            PlayeroneTwoPuzzle= Bpuzzlecharacter
            #second game right_side
            PlayerTwoTwo = BcharacterOne

        if expCond == "I" or expCond == "J" or expCond == "K" or expCond == "L" or expCond == "M" or expCond == "N" or expCond == "O" or expCond == "P":
            #first game participant
            Participant = BcharacterThree
            #first game left_side
            PlayerOne = BcharacterTwo
            PlayerOnePuzzle = Bpuzzlecharacter
            #first game right_side
            PlayerTwo = BcharacterOne
            #second game participant
            ParticipantTwo =  AcharacterThree
            #second game left_side
            PlayerOneTwo = AcharacterTwo
            PlayeroneTwoPuzzle= Apuzzlecharacter
            #second game right_side
            PlayerTwoTwo = AcharacterOn
        '''
        ParticipantTwo = visual.ImageStim(myWindow, pos= (0, -.5),size= (.23,.45) ,image= finStimDir + AcharacterThree)
            PlayerOneTwo = visual.ImageStim(myWindow, pos= (-.5,.5),size= (.23,.45), image=finStimDir + AcharacterTwo)
            PlayerTwoTwo = visual.ImageStim(myWindow, pos= (.5,.5),size= (.23,.45), image=finStimDir + AcharacterOne)
            Participant = visual.ImageStim(myWindow, pos= (0, -.5),size= (.23,.45) ,image= finStimDir + BcharacterThree)
            PlayerOne = visual.ImageStim(myWindow, pos= (-.5,.5),size= (.23,.45), image=finStimDir + BcharacterTwo)
            PlayerTwo = visual.ImageStim(myWindow, pos= (.5,.5),size= (.23,.45), image=finStimDir + BcharacterOne)
        '''

        #to make throws, left= 0, right=1
        def CalcPoints(ballx, bally, futurex, futurey, step, receive):
            if receive =='right':
                rise= step/float(futurey)- bally
                run = step/float(futurex)- ballx
                points = [[ballx, bally]]
                for i in range(175):
                    curPoint = [(points[i][0] + step), (points[i][1]+step+0.008)]
                    points.append(curPoint)
                return points
            elif receive == 'left':
                rise= step/float(futurey)- bally
                run = step/float(futurex)- ballx
                points = [[ballx, bally]]
                for i in range(175):
                    curPoint = [(points[i][0] - step), (points[i][1]+step+0.008)]
                    points.append(curPoint)
                return points
            elif receive == 'one':
                rise= step/float(futurey)- bally
                run = step/float(futurex)- ballx
                points = [[ballx, bally]]
                for i in range(175):
                    curPoint = [(points[i][0] + step), (points[i][1])]
                    points.append(curPoint)
                return points
            elif receive == 'two':
                rise= step/float(futurey)- bally
                run = step/float(futurex)- ballx
                points = [[ballx, bally]]
                for i in range(175):
                    curPoint = [(points[i][0] - step), (points[i][1])]
                    points.append(curPoint)
                return points
            elif receive == 'pOne':
                rise= step/float(futurey)- bally
                run = step/float(futurex)- ballx
                points = [[ballx, bally]]
                for i in range(75):
                    curPoint = [(points[i][0] + step), (points[i][1]-step-0.008)]
                    points.append(curPoint)
                return points
            elif receive == 'pTwo':
                rise= step/float(futurey)- bally
                run = step/float(futurex)- ballx
                points = [[ballx, bally]]
                for i in range(175):
                    curPoint = [(points[i][0] - step), (points[i][1]-step-0.008)]
                    points.append(curPoint)
                return points

        part2Two = CalcPoints(participantBallRightPos[0],participantBallRightPos[1],playerTwoBallPos[0],playerTwoBallPos[1],0.005, 'right')
        part2One = CalcPoints(participantBallLeftPos[0], participantBallLeftPos[1], playerOneBallPos[0], playerOneBallPos[1],0.005, 'left')
        one2Two = CalcPoints(playerOneBallPos[0], playerOneBallPos[1],playerTwoBallPos[0],playerTwoBallPos[1],0.005, 'one')
        two2One = CalcPoints(playerTwoBallPos[0], playerTwoBallPos[1],playerOneBallPos[0],playerOneBallPos[1],0.005, 'two')
        one2Part = CalcPoints(playerOneBallPos[0], playerOneBallPos[1],participantBallRightPos[0],participantBallRightPos[1],0.005, 'pOne')
        two2Part = CalcPoints(playerTwoBallPos[0], playerTwoBallPos[1],participantBallRightPos[0],participantBallRightPos[1],0.005, 'pTwo')

        #hopefully lets me end the game?
        numThrow=0


        #defining questionType
        if expCond == "A" or expCond == "I" or expCond == "E" or expCond == "M":
            questionType = 1
        elif expCond == "B" or expCond == "F" or expCond == "J" or expCond == "N":
            questionType = 2
        elif expCond == "C" or expCond == "G" or expCond == "K" or expCond == "O":
            questionType = 3
        elif expCond == "D" or expCond == "H" or expCond == "L" or expCond == "P":
            questionType = 4
  Routine Game
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        ParticipantGame = visual.ImageStim(myWindow, pos= (0, -.5),size= (.23,.45), image= finStimDir+ Participant)
        PlayerOneGame = visual.ImageStim(myWindow, pos= (-.5,.5),size= (.23,.45), image= finStimDir+PlayerOne)
        PlayerTwoGame= visual.ImageStim(myWindow, pos= (.5,.5),size= (.23,.45), image= finStimDir+PlayerTwo)
        #warmup
        myBackground.draw()
        ParticipantGame.draw()
        PlayerOneGame.draw()
        PlayerTwoGame.draw()
        ball.draw()
        myWindow.flip()


        if expCond == "A" or expCond == "B" or expCond== "C" or expCond=="D" or expCond =="I" or expCond=="J" or expCond=="K" or expCond=="L":
            gameType = "play"
            throwTo=event.waitKeys(keyList=throwResp)[0]

        elif expCond == "E" or expCond == "F" or expCond== "G" or expCond=="H" or expCond =="M" or expCond=="N" or expCond=="O" or expCond=="P":
            gameType = "observe"
            throwTo= throwResp


        if gameType == "observe":
            for curPoint in part2Two:
                ball.setPos(curPoint)#throw 1
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(0.5)
                numThrow += 1
        #            throwball('playerTwo')
            for curPoint in two2One:
                ball.setPos(curPoint)#throw 2
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(.5)
                numThrow += 1
        #            throwball('playerOne')
            for curPoint in one2Part:#throw 3
                ball.setPos(curPoint)
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(.5)
                numThrow += 1
        #               throwball (p1)
            for curPoint in part2One:#throw 4
                ball.setPos(curPoint)
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(.5)
                numThrow += 1
        #               throwball (p1)
            for curPoint in one2Two:#throw 5
                ball.setPos(curPoint)
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(.5)
                numThrow += 1
        elif gameType == "play":
            while numThrow < 5:
                if throwTo == 'right':
                    for curPoint in part2Two: #throw_1r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                    for curPoint in two2One: #throw_2r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                    for curPoint in one2Part: #throw_3r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(.5)
                        numThrow += 1
                elif throwTo == 'left':
                    for curPoint in part2One:#throw_1l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                    myBackground.draw()
                    PlayerOneGame.draw()
                    PlayerTwoGame.draw()
                    ParticipantGame.draw()
                    myWindow.flip()
                    core.wait(.01)
                    core.wait(.5)
                    numThrow+=1
                    for curPoint in one2Two: #throw_2l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                    myBackground.draw()
                    PlayerOneGame.draw()
                    PlayerTwoGame.draw()
                    ParticipantGame.draw()
                    myWindow.flip()
                    core.wait(.01)
                    core.wait(.5)
                    numThrow += 1
                    for curPoint in two2Part: #throw_3l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(.5)
                        numThrow += 1
                throwTo2 = event.waitKeys(keyList=keyResp)[0]
                if throwTo2 == 'right':
                    for curPoint in part2Two: #throw_4r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                    for curPoint in two2One: #throw_5r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                elif throwTo2 == 'left':
                    for curPoint in part2One:#throw_1l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow+=1
                    for curPoint in one2Two: #throw_2l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
        #Exclusion piece for observed and for play
            while numThrow < 35:
                if throwTo2 == 'right':
                    for curPoint in one2Two:
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                    for curPoint in two2One:
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                elif throwTo2 == 'left':
                    for curPoint in two2One:
                            ball.setPos(curPoint)
                            myBackground.draw()
                            PlayerOneGame.draw()
                            PlayerTwoGame.draw()
                            ParticipantGame.draw()
                            ball.draw()
                            myWindow.flip()
                            core.wait(0.01)
                            core.wait(0.5)
                            numThrow += 1
                    for curPoint in one2Two:
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
  Routine introductions
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        obsText= "Hey Look! Here are some people. They're going to play catch. Let's watch!"
        playText = "Hey Look! Here are some people. We're going to play catch. Let's play!"

        if expCond == "E" or expCond == "F" or expCond== "G" or expCond=="H" or expCond =="M" or expCond=="N" or expCond=="O" or expCond=="P":
            gameType = "observe"
            participantName = "Alex"
            playerTwoName = "Skyler"
            playerOneName = "Taylor"
            greeting = obsText
            gameType2= "play"
            participantNameTwo="Morgan"
            playerTwoNameTwo="Jordan"
            playerOneNameTwo= "You"
            greeting2 = playText
        elif expCond == "A" or expCond == "B" or expCond== "C" or expCond=="D" or expCond =="I" or expCond=="J" or expCond=="K" or expCond=="L":
            gameType= "play"
            playerOneName =  "Morgan"
            playerTwoName = "Jordan"
            participantName = "You"
            greeting = playText
            gameType2= "observe"
            participantNameTwo="Alex"
            playerTwoNameTwo="Skyler"
            playerOneNameTwo="Taylor"
            greeting2 = obsText
      Begin Routine:
        myBackground.draw()
        myWindow.flip()




        storyText = visual.TextStim(myWindow, text = greeting, pos =(0, .7), wrapWidth= 1.5, color= 'black')
        keyControl = visual.TextStim(myWindow, text = "Press Space to begin", wrapWidth= 1.5, color= 'black', pos = (0, -.7))

        characterOne = visual.ImageStim(myWindow, pos= (-.5, .15),size= (.23,.45) ,image= finStimDir + PlayerOne)
        characterTwo = visual.ImageStim(myWindow, pos= (0, .15),size= (.23,.45) ,image= finStimDir +  Participant)
        characterThree= visual.ImageStim(myWindow, pos= (.5, .15),size= (.23,.45) ,image= finStimDir +  PlayerTwo)
        characterOneName = visual.TextStim(myWindow, text= playerOneName, pos= (-.5,-.2), color='black')
        characterTwoName =visual.TextStim(myWindow, text= participantName, pos= (0,-.2), color='black')
        characterThreeName = visual.TextStim(myWindow, text= playerTwoName, pos= (.5,-.2), color='black')


        myBackground.draw()
        storyText.draw()
        keyControl.draw()
        characterOne.draw()
        characterTwo.draw()
        characterThree.draw()
        characterOneName.draw()
        characterTwoName.draw()
        characterThreeName.draw()
        myWindow.flip()

        introKeyChoices= ['space']
        introResponse = event.waitKeys(keyList= introKeyChoices)[0]


        if gameType== "play":
            gameInstr = visual.TextStim(myWindow, text= "To throw the ball left, press the left arrow key. \n\n To \
        throw the ball right, press the right arrow key \n\n Press space to begin.", wrapWidth=1.5, color='black')
            myBackground.draw()
            gameInstr.draw()
            myWindow.flip()
            event.waitKeys(keyList='space')

            myBackground.draw()
            myWindow.flip()

            loadText = visual.TextStim(myWindow, text= "Loading...", pos=(0,0), wrapWidth=1.5, color='black')
            loadShape = visual.Rect(myWindow, size=(0.25,0.25), pos= (-1,-0.2), fillColor= 'aquamarine')

            move= 0

            while move < 80:
                loadShape.pos +=(0.03, 0.0)
                myBackground.draw()
                loadText.draw()
                loadShape.draw()
                myWindow.flip()
                core.wait(.05)
                move= move + 1

        elif gameType == "observe":
            loadText = visual.TextStim(myWindow, text= "Loading...", pos=(0,0), wrapWidth=1.5, color='black')
            loadShape = visual.Rect(myWindow, size=(0.25,0.25), pos= (-1,-0.2), fillColor= 'aquamarine')

            move= 0

            while move < 80:
                loadShape.pos +=(0.03, 0.0)
                myBackground.draw()
                loadText.draw()
                loadShape.draw()
                myWindow.flip()
                core.wait(.05)
                move= move + 1
  Routine questions
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if questionType==1:
            #MC
            charText = visual.TextStim(myWindow, text= "Did " + participantName + " get to play or have to watch?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, 0), size = (.23,.45), image= finStimDir + Participant )
            chooseOne= visual.TextStim(myWindow, pos=(-.5, -.5), text= "Play", wrapWidth=1.5, color='black')
            chooseTwo= visual.TextStim(myWindow, pos=(.5, -.5), text= "Watch", wrapWidth=1.5, color='black')
            myBackground.draw()
            charText.draw()
            optionOne.draw()
            chooseOne.draw()
            chooseTwo.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
            else:
                print("watch")
            #Nice
            charText = visual.TextStim(myWindow, text= "Is "+ playerOneName +" nice or not nice?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), size= (.5,.5), image= finStimDir + 'NiceNotNice.png' )
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size = (.23,.45),image= finStimDir + PlayerOne)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("nice")
                scaleNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NiceScale.png')
                scaleNiceText= visual.TextStim(myWindow, pos = (0,.7), text = "Is "+ playerOneName +" a little nice, nice, or really nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNiceText.draw()
                scaleNice.draw()
                optionTwo.draw()
                myWindow.flip()
                niceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = niceScaleChoice)[0]
            elif response == 'right':
                print("not nice")
                scaleNotNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NotNiceScale.png')
                scaleNotNiceText= visual.TextStim(myWindow, pos = (0,.7), text = "Is "+ playerOneName+" a little not nice, not nice, or really not nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNotNiceText.draw()
                scaleNotNice.draw()
                optionTwo.draw()
                myWindow.flip()
                notniceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = notniceScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #Play
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! " + playerOneName + " is going to play another game. Do you think they will let you play or not let you play?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (-.5, -.5), size= (.5,.5),image= finStimDir + 'Play.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,0), size=(.23,.45), image= finStimDir + PlayerOne)
            optionThree = visual.ImageStim(myWindow, pos= (.5, -.5), size=(.5,.5), image= finStimDir + 'NoPlay.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            optionThree.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
                scalePlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalePlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+playerOneName+" let you play?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePlayText.draw()
                scalePlay.draw()
                optionTwo.draw()
                myWindow.flip()
                PlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = PlayScaleChoice)[0]
            elif response == 'right':
                print("play")
                scalenoPlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalenoPlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+ playerOneName+" not play with you?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalenoPlayText.draw()
                scalenoPlay.draw()
                optionTwo.draw()
                myWindow.flip()
                noPlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = noPlayScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #Help
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! "+playerOneName+" is working to complete a puzzle. It looks like they are missing some pieces. Here are some pieces. Do you want to send any of the pieces to them or keep them?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), size =(.5,.5), image= finStimDir + 'PuzzlePieces.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size=(.23,.45),image= finStimDir + PlayerOnePuzzle)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("give pieces")
                scalePuzzleGive = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleGiveText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to give "+ playerOneName+" ?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleGiveText.draw()
                scalePuzzleGive.draw()
                optionTwo.draw()
                myWindow.flip()
                GiveScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = GiveScaleChoice)[0]
            elif response == 'right':
                print("keep pieces")
                scalePuzzleKeep = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleKeepText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to keep?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleKeepText.draw()
                scalePuzzleKeep.draw()
                optionTwo.draw()
                myWindow.flip()
                KeepScaleChoice = ['left', 'up', 'right']
                responseKeepScale= event.waitKeys(keyList = KeepScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #cooperate
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "We are going to play another game. This game need two people. Do you want to work with "+ playerOneName+ " or someone else?", pos=(0,.7), wrapWidth=1.5, color='black')


            optionOne = visual.ImageStim(myWindow, pos= (.5, 0), size= (.23,.45), image= finStimDir + PlayerOne)
            optionTwo = visual.ImageStim(myWindow, pos= (-.5,0), image= finStimDir + 'work_together.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()

            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]

            if response == 'left':
                print("together")

            elif response == 'right':
                print("someone else")

            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

        elif questionType==2:
            #MC
            charText = visual.TextStim(myWindow, text= "Did " + participantName + " get to play or have to watch?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, 0), size = (.23,.45), image= finStimDir + Participant )
            chooseOne= visual.TextStim(myWindow, pos=(-.5, -.5), text= "Play", wrapWidth=1.5, color='black')
            chooseTwo= visual.TextStim(myWindow, pos=(.5, -.5), text= "Watch", wrapWidth=1.5, color='black')
            myBackground.draw()
            charText.draw()
            optionOne.draw()
            chooseOne.draw()
            chooseTwo.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
            else:
                print("watch")
            #Play
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! " + playerOneName + " is going to play another game. Do you think they will let you play or not let you play?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (.5, -.5), image= finStimDir + 'Play.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,0), size = (.23,.45), image= finStimDir + PlayerOne)
            optionThree = visual.ImageStim(myWindow, pos= (-.5, -.5), image= finStimDir + 'NoPlay.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            optionThree.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
                scalePlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalePlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+playerOneName+" let you play?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePlayText.draw()
                scalePlay.draw()
                optionTwo.draw()
                myWindow.flip()
                PlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = PlayScaleChoice)[0]
            elif response == 'right':
                print("play")
                scalenoPlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalenoPlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+ playerOneName+" not play with you?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalenoPlayText.draw()
                scalenoPlay.draw()
                optionTwo.draw()
                myWindow.flip()
                noPlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = noPlayScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #Nice
            charText = visual.TextStim(myWindow, text= "Is "+ playerOneName +" nice or not nice?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'NiceNotNice.png' )
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size = (.23,.45),image= finStimDir + PlayerOne)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("nice")
                scaleNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NiceScale.png')
                scaleNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneName +" a little nice, nice, or really nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNiceText.draw()
                scaleNice.draw()
                optionTwo.draw()
                myWindow.flip()
                niceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = niceScaleChoice)[0]
            elif response == 'right':
                print("not nice")
                scaleNotNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NotNiceScale.png')
                scaleNotNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneName+" a little not nice, not nice, or really not nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNotNiceText.draw()
                optionTwo.draw()
                myWindow.flip()
                notniceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = notniceScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #Cooperate
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "We are going to play another game. This game need two people. Do you want to work with "+ playerOneName+ " or someone else?", pos=(0,.7), wrapWidth=1.5, color='black')


            optionOne = visual.ImageStim(myWindow, pos= (.5, 0),size= (.23,.45), image= finStimDir + PlayerOne)
            optionTwo = visual.ImageStim(myWindow, pos= (-.5,0), image= finStimDir + 'work_together.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()

            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]

            if response == 'left':
                print("together")

            elif response == 'right':
                print("someone else")

            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #Help
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! "+playerOneName+" is working to complete a puzzle. It looks like they are missing some pieces. Here are some pieces. Do you want to send any of the pieces to them  or keep them?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'PuzzlePieces.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size= (.23,.45), image= finStimDir + PlayerOnePuzzle)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("give pieces")
                scalePuzzleGive = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleGiveText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to give "+ playerOneName+" ?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleGiveText.draw()
                scalePuzzleGive.draw()
                optionTwo.draw()
                myWindow.flip()
                GiveScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = GiveScaleChoice)[0]
            elif response == 'right':
                print("keep pieces")
                scalePuzzleKeep = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleKeepText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to keep?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleKeepText.draw()
                scalePuzzleKeep.draw()
                optionTwo.draw()
                myWindow.flip()
                KeepScaleChoice = ['left', 'up', 'right']
                responseKeepScale= event.waitKeys(keyList = KeepScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
        elif questionType==3:
            #Nice
            charText = visual.TextStim(myWindow, text= "Is "+ playerOneName +" nice or not nice?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'NiceNotNice.png' )
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size = (.23,.45),image= finStimDir + PlayerOne)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("nice")
                scaleNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NiceScale.png')
                scaleNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneName +" a little nice, nice, or really nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNiceText.draw()
                scaleNice.draw()
                optionTwo.draw()
                myWindow.flip()
                niceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = niceScaleChoice)[0]
            elif response == 'right':
                print("not nice")
                scaleNotNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NotNiceScale.png')
                scaleNotNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneName+" a little not nice, not nice, or really not nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNotNiceText.draw()
                optionTwo.draw()
                myWindow.flip()
                notniceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = notniceScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #play
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! " + playerOneName + " is going to play another game. Do you think they will let you play or not let you play?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (.5, -.5), image= finStimDir + 'Play.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,0), size= (.23,.45),image= finStimDir + PlayerOne)
            optionThree = visual.ImageStim(myWindow, pos= (-.5, -.5), image= finStimDir + 'NoPlay.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            optionThree.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
                scalePlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalePlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+playerOneName+" let you play?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePlayText.draw()
                scalePlay.draw()
                optionTwo.draw()
                myWindow.flip()
                PlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = PlayScaleChoice)[0]
            elif response == 'right':
                print("play")
                scalenoPlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalenoPlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+ playerOneName+" not play with you?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalenoPlayText.draw()
                scalenoPlay.draw()
                optionTwo.draw()
                myWindow.flip()
                noPlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = noPlayScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #help
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! "+playerOneName+" is working to complete a puzzle. It looks like they are missing some pieces. Here are some pieces. Do you want to send any of the pieces them or keep them?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'PuzzlePieces.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3),size= (.23,.45), image= finStimDir + PlayerOnePuzzle)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("give pieces")
                scalePuzzleGive = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleGiveText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to give "+ playerOneName+" ?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleGiveText.draw()
                scalePuzzleGive.draw()
                optionTwo.draw()
                myWindow.flip()
                GiveScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = GiveScaleChoice)[0]
            elif response == 'right':
                print("keep pieces")
                scalePuzzleKeep = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleKeepText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to keep?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleKeepText.draw()
                scalePuzzleKeep.draw()
                optionTwo.draw()
                myWindow.flip()
                KeepScaleChoice = ['left', 'up', 'right']
                responseKeepScale= event.waitKeys(keyList = KeepScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #cooperate
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "We are going to play another game. This game need two people. Do you want to work with "+ playerOneName+ " or someone else?", pos=(0,.7), wrapWidth=1.5, color='black')


            optionOne = visual.ImageStim(myWindow, pos= (.5, 0), image= finStimDir + PlayerOne)
            optionTwo = visual.ImageStim(myWindow, pos= (-.5,0), image= finStimDir + 'work_together.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()

            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]

            if response == 'left':
                print("together")

            elif response == 'right':
                print("someone else")

            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #MC
            charText = visual.TextStim(myWindow, text= "Did " + participantName + " get to play or have to watch?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, 0), size = (.23,.45), image= finStimDir + Participant )
            chooseOne= visual.TextStim(myWindow, pos=(-.5, -.5), text= "Play", wrapWidth=1.5, color='black')
            chooseTwo= visual.TextStim(myWindow, pos=(.5, -.5), text= "Watch", wrapWidth=1.5, color='black')
            myBackground.draw()
            charText.draw()
            optionOne.draw()
            chooseOne.draw()
            chooseTwo.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
            else:
                print("watch")
        elif questionType==4:
            #play
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! " + playerOneName + " is going to play another game. Do you think they will let you play or not let you play?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (.5, -.5), image= finStimDir + 'Play.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,0),size= (.23,.45), image= finStimDir + PlayerOne)
            optionThree = visual.ImageStim(myWindow, pos= (-.5, -.5), image= finStimDir + 'NoPlay.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            optionThree.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
                scalePlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalePlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+playerOneName+" let you play?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePlayText.draw()
                scalePlay.draw()
                optionTwo.draw()
                myWindow.flip()
                PlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = PlayScaleChoice)[0]
            elif response == 'right':
                print("play")
                scalenoPlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalenoPlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+ playerOneName+" not play with you?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalenoPlayText.draw()
                scalenoPlay.draw()
                optionTwo.draw()
                myWindow.flip()
                noPlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = noPlayScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #nice
            charText = visual.TextStim(myWindow, text= "Is "+ playerOneName +" nice or not nice?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'NiceNotNice.png' )
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size = (.23,.45),image= finStimDir + PlayerOne)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("nice")
                scaleNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NiceScale.png')
                scaleNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneName +" a little nice, nice, or really nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNiceText.draw()
                scaleNice.draw()
                optionTwo.draw()
                myWindow.flip()
                niceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = niceScaleChoice)[0]
            elif response == 'right':
                print("not nice")
                scaleNotNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NotNiceScale.png')
                scaleNotNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneName+" a little not nice, not nice, or really not nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNotNiceText.draw()
                optionTwo.draw()
                myWindow.flip()
                notniceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = notniceScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #cooperate
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "We are going to play another game. This game need two people. Do you want to work with "+ playerOneName+ " or someone else?", pos=(0,.7), wrapWidth=1.5, color='black')


            optionOne = visual.ImageStim(myWindow,size= (.23,.45), pos= (.5, 0), image= finStimDir + PlayerOne)
            optionTwo = visual.ImageStim(myWindow, pos= (-.5,0), image= finStimDir + 'work_together.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()

            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]

            if response == 'left':
                print("together")

            elif response == 'right':
                print("someone else")

            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #help
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! "+playerOneName+" is working to complete a puzzle. It looks like they are missing some pieces. Here are some pieces. Do you want to send any of the pieces to them or keep them?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'PuzzlePieces.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size= (.23,.45), image= finStimDir + PlayerOnePuzzle)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("give pieces")
                scalePuzzleGive = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleGiveText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to give "+ playerOneName+" ?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleGiveText.draw()
                scalePuzzleGive.draw()
                optionTwo.draw()
                myWindow.flip()
                GiveScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = GiveScaleChoice)[0]
            elif response == 'right':
                print("keep pieces")
                scalePuzzleKeep = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleKeepText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to keep?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleKeepText.draw()
                scalePuzzleKeep.draw()
                optionTwo.draw()
                myWindow.flip()
                KeepScaleChoice = ['left', 'up', 'right']
                responseKeepScale= event.waitKeys(keyList = KeepScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #MC
            charText = visual.TextStim(myWindow, text= "Did " + participantName + " get to play or have to watch?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, 0), size = (.23,.45), image= finStimDir + Participant )
            chooseOne= visual.TextStim(myWindow, pos=(-.5, -.5), text= "Play", wrapWidth=1.5, color='black')
            chooseTwo= visual.TextStim(myWindow, pos=(.5, -.5), text= "Watch", wrapWidth=1.5, color='black')
            myBackground.draw()
            charText.draw()
            optionOne.draw()
            chooseOne.draw()
            chooseTwo.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
            else:
                print("watch")
  Routine introductions_game2
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        myBackground.draw()
        myWindow.flip()


        storyText = visual.TextStim(myWindow, text = greeting, pos =(0, .7), wrapWidth= 1.5, color= 'black')
        keyControl = visual.TextStim(myWindow, text = "Press Space to begin", wrapWidth= 1.5, color= 'black', pos = (0, -.7))

        characterOne = visual.ImageStim(myWindow, pos= (-.5, .15),size= (.23,.45) ,image= finStimDir + PlayerOneTwo)
        characterTwo = visual.ImageStim(myWindow, pos= (0, .15),size= (.23,.45) ,image= finStimDir +  ParticipantTwo)
        characterThree= visual.ImageStim(myWindow, pos= (.5, .15),size= (.23,.45) ,image= finStimDir +  PlayerTwoTwo)
        characterOneName = visual.TextStim(myWindow, text= playerOneNameTwo, pos= (-.5,-.2), color='black')
        characterTwoName =visual.TextStim(myWindow, text= participantNameTwo, pos= (0,-.2), color='black')
        characterThreeName = visual.TextStim(myWindow, text= playerTwoNameTwo, pos= (.5,-.2), color='black')


        myBackground.draw()
        storyText.draw()
        keyControl.draw()
        characterOne.draw()
        characterTwo.draw()
        characterThree.draw()
        characterOneName.draw()
        characterTwoName.draw()
        characterThreeName.draw()
        myWindow.flip()

        introKeyChoices= ['space']
        introResponse = event.waitKeys(keyList= introKeyChoices)[0]


        if gameType== "play":
            gameInstr = visual.TextStim(myWindow, text= "To throw the ball left, press the left arrow key. \n\n To \
        throw the ball right, press the right arrow key \n\n Press space to begin.", wrapWidth=1.5, color='black')
            myBackground.draw()
            gameInstr.draw()
            myWindow.flip()
            event.waitKeys(keyList='space')

            myBackground.draw()
            myWindow.flip()

            loadText = visual.TextStim(myWindow, text= "Loading...", pos=(0,0), wrapWidth=1.5, color='black')
            loadShape = visual.Rect(myWindow, size=(0.25,0.25), pos= (-1,-0.2), fillColor= 'aquamarine')

            move= 0

            while move < 80:
                loadShape.pos +=(0.03, 0.0)
                myBackground.draw()
                loadText.draw()
                loadShape.draw()
                myWindow.flip()
                core.wait(.05)
                move= move + 1

        elif gameType == "observe":
            loadText = visual.TextStim(myWindow, text= "Loading...", pos=(0,0), wrapWidth=1.5, color='black')
            loadShape = visual.Rect(myWindow, size=(0.25,0.25), pos= (-1,-0.2), fillColor= 'aquamarine')

            move= 0

            while move < 80:
                loadShape.pos +=(0.03, 0.0)
                myBackground.draw()
                loadText.draw()
                loadShape.draw()
                myWindow.flip()
                core.wait(.05)
                move= move + 1
  Routine GameTwo
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        ParticipantGame = visual.ImageStim(myWindow, pos= (0, -.5),size= (.23,.45), image= finStimDir+ ParticipantTwo)
        PlayerOneGame = visual.ImageStim(myWindow, pos= (-.5,.5),size= (.23,.45), image= finStimDir+PlayerOneTwo)
        PlayerTwoGame= visual.ImageStim(myWindow, pos= (.5,.5),size= (.23,.45), image= finStimDir+PlayerTwoTwo)
        #warmup
        myBackground.draw()
        ParticipantGame.draw()
        PlayerOneGame.draw()
        PlayerTwoGame.draw()
        ball.draw()
        myWindow.flip()


        if expCond == "E" or expCond == "F" or expCond== "G" or expCond=="H" or expCond =="M" or expCond=="N" or expCond=="O" or expCond=="P":
            gameType = "play"
            throwTo=event.waitKeys(keyList=throwResp)[0]
        elif expCond == "A" or expCond == "B" or expCond== "C" or expCond=="D" or expCond =="I" or expCond=="J" or expCond=="K" or expCond=="L":
            gameType = "observe"
            throwTo= throwResp


        if gameType == "observe":
            for curPoint in part2Two:
                ball.setPos(curPoint)#throw 1
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(0.5)
                numThrow += 1
        #            throwball('playerTwo')
            for curPoint in two2One:
                ball.setPos(curPoint)#throw 2
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(1.5)
                numThrow += 1
        #            throwball('playerOne')
            for curPoint in one2Part:#throw 3
                ball.setPos(curPoint)
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(.5)
                numThrow += 1
        #               throwball (p1)
            for curPoint in part2One:#throw 4
                ball.setPos(curPoint)
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(.5)
                numThrow += 1
        #               throwball (p1)
            for curPoint in one2Two:#throw 5
                ball.setPos(curPoint)
                myBackground.draw()
                PlayerOneGame.draw()
                PlayerTwoGame.draw()
                ParticipantGame.draw()
                ball.draw()
                myWindow.flip()
                core.wait(0.01)
                core.wait(.5)
                numThrow += 1
        elif gameType == "play":
            while numThrow < 5:
                if throwTo == 'right':
                    for curPoint in part2Two: #throw_1r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                    for curPoint in two2One: #throw_2r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                    for curPoint in one2Part: #throw_3r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(.5)
                        numThrow += 1
                elif throwTo == 'left':
                    for curPoint in part2One:#throw_1l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                    myBackground.draw()
                    PlayerOneGame.draw()
                    PlayerTwoGame.draw()
                    ParticipantGame.draw()
                    myWindow.flip()
                    core.wait(.01)
                    core.wait(1.5)
                    numThrow+=1
                    for curPoint in one2Two: #throw_2l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                    myBackground.draw()
                    PlayerOneGame.draw()
                    PlayerTwoGame.draw()
                    ParticipantGame.draw()
                    myWindow.flip()
                    core.wait(.01)
                    core.wait(1.5)
                    numThrow += 1
                    for curPoint in two2Part: #throw_3l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(.5)
                        numThrow += 1
                throwTo2 = event.waitKeys(keyList=keyResp)[0]
                if throwTo2 == 'right':
                    for curPoint in part2Two: #throw_4r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                    for curPoint in two2One: #throw_5r
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                elif throwTo2 == 'left':
                    for curPoint in part2One:#throw_1l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow+=1
                    for curPoint in one2Two: #throw_2l
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
        #Exclusion piece for observed and for play
            while numThrow < 35:
                if throwTo2 == 'right':
                    for curPoint in one2Two:
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                    for curPoint in two2One:
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
                elif throwTo2 == 'left':
                    for curPoint in two2One:
                            ball.setPos(curPoint)
                            myBackground.draw()
                            PlayerOneGame.draw()
                            PlayerTwoGame.draw()
                            ParticipantGame.draw()
                            ball.draw()
                            myWindow.flip()
                            core.wait(0.01)
                            core.wait(1.5)
                            numThrow += 1
                    for curPoint in one2Two:
                        ball.setPos(curPoint)
                        myBackground.draw()
                        PlayerOneGame.draw()
                        PlayerTwoGame.draw()
                        ParticipantGame.draw()
                        ball.draw()
                        myWindow.flip()
                        core.wait(0.01)
                        core.wait(0.5)
                        numThrow += 1
  Routine questions2
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if questionType==1:
            #MC
            charText = visual.TextStim(myWindow, text= "Did " + participantNameTwo + " get to play or have to watch?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, 0), size = (.23,.45), image= finStimDir + ParticipantTwo)
            chooseOne= visual.TextStim(myWindow, pos=(-.5, -.5), text= "Play", wrapWidth=1.5, color='black')
            chooseTwo= visual.TextStim(myWindow, pos=(.5, -.5), text= "Watch", wrapWidth=1.5, color='black')
            myBackground.draw()
            charText.draw()
            optionOne.draw()
            chooseOne.draw()
            chooseTwo.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
            else:
                print("watch")

        #Nice
            charText = visual.TextStim(myWindow, text= "Is "+ playerOneNameTwo +" nice or not nice?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), size= (.5,.5), image= finStimDir + 'NiceNotNice.png' )
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size = (.23,.45),image= finStimDir + PlayerOneTwo)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("nice")
                scaleNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NiceScale.png')
                scaleNiceText= visual.TextStim(myWindow, pos = (0,.7), text = "Is "+ playerOneNameTwo +" a little nice, nice, or really nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNiceText.draw()
                scaleNice.draw()
                optionTwo.draw()
                myWindow.flip()
                niceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = niceScaleChoice)[0]
            elif response == 'right':
                print("not nice")
                scaleNotNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NotNiceScale.png')
                scaleNotNiceText= visual.TextStim(myWindow, pos = (0,.7), text = "Is "+ playerOneNameTwo+" a little not nice, not nice, or really not nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNotNiceText.draw()
                scaleNotNice.draw()
                optionTwo.draw()
                myWindow.flip()
                notniceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = notniceScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
        #Play
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! " + playerOneNameTwo + " is going to play another game. Do you think they will let you play or not let you play?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (-.5, -.5), size= (.5,.5),image= finStimDir + 'Play.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,0), size=(.23,.45), image= finStimDir + PlayerOneTwo)
            optionThree = visual.ImageStim(myWindow, pos= (.5, -.5), size=(.5,.5), image= finStimDir + 'NoPlay.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            optionThree.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
                scalePlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalePlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+playerOneNameTwo+" let you play?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePlayText.draw()
                scalePlay.draw()
                optionTwo.draw()
                myWindow.flip()
                PlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = PlayScaleChoice)[0]
            elif response == 'right':
                print("play")
                scalenoPlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalenoPlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+ playerOneNameTwo+" not play with you?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalenoPlayText.draw()
                scalenoPlay.draw()
                optionTwo.draw()
                myWindow.flip()
                noPlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = noPlayScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #Help
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! "+playerOneNameTwo+" is working to complete a puzzle. It looks like they are missing some pieces. Here are some pieces. Do you want to send any of the pieces to them or keep them?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), size =(.5,.5), image= finStimDir + 'PuzzlePieces.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size=(.23,.45),image= finStimDir + PlayerOnePuzzleTwo)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("give pieces")
                scalePuzzleGive = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleGiveText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to give "+ playerOneNameTwo+" ?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleGiveText.draw()
                scalePuzzleGive.draw()
                optionTwo.draw()
                myWindow.flip()
                GiveScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = GiveScaleChoice)[0]
            elif response == 'right':
                print("keep pieces")
                scalePuzzleKeep = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleKeepText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to keep?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleKeepText.draw()
                scalePuzzleKeep.draw()
                optionTwo.draw()
                myWindow.flip()
                KeepScaleChoice = ['left', 'up', 'right']
                responseKeepScale= event.waitKeys(keyList = KeepScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #cooperate
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "We are going to play another game. This game need two people. Do you want to work with "+ playerOneNameTwo+ " or someone else?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (.5, 0), size= (.23,.45), image= finStimDir + PlayerOneTwo)
            optionTwo = visual.ImageStim(myWindow, pos= (-.5,0), image= finStimDir + 'work_together.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]

            if response == 'left':
                print("together")

            elif response == 'right':
                print("someone else")

            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

        elif questionType==2:
            #MC
            charText = visual.TextStim(myWindow, text= "Did " + participantNameTwo + " get to play or have to watch?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, 0), size = (.23,.45), image= finStimDir + ParticipantTwo)
            chooseOne= visual.TextStim(myWindow, pos=(-.5, -.5), text= "Play", wrapWidth=1.5, color='black')
            chooseTwo= visual.TextStim(myWindow, pos=(.5, -.5), text= "Watch", wrapWidth=1.5, color='black')
            myBackground.draw()
            charText.draw()
            optionOne.draw()
            chooseOne.draw()
            chooseTwo.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
            else:
                print("watch")
            #Play
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! " + playerOneNameTwo + " is going to play another game. Do you think they will let you play or not let you play?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (.5, -.5), image= finStimDir + 'Play.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,0), size = (.23,.45), image= finStimDir + PlayerOneTwo)
            optionThree = visual.ImageStim(myWindow, pos= (-.5, -.5), image= finStimDir + 'NoPlay.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            optionThree.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
                scalePlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalePlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+playerOneNameTwo+" let you play?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePlayText.draw()
                scalePlay.draw()
                optionTwo.draw()
                myWindow.flip()
                PlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = PlayScaleChoice)[0]
            elif response == 'right':
                print("play")
                scalenoPlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalenoPlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+ playerOneNameTwo+" not play with you?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalenoPlayText.draw()
                scalenoPlay.draw()
                optionTwo.draw()
                myWindow.flip()
                noPlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = noPlayScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #Nice
            charText = visual.TextStim(myWindow, text= "Is "+ playerOneNameTwo +" nice or not nice?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'NiceNotNice.png' )
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size = (.23,.45),image= finStimDir + PlayerOneTwo)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("nice")
                scaleNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NiceScale.png')
                scaleNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneNameTwo +" a little nice, nice, or really nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNiceText.draw()
                scaleNice.draw()
                optionTwo.draw()
                myWindow.flip()
                niceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = niceScaleChoice)[0]
            elif response == 'right':
                print("not nice")
                scaleNotNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NotNiceScale.png')
                scaleNotNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneNameTwo+" a little not nice, not nice, or really not nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNotNiceText.draw()
                optionTwo.draw()
                myWindow.flip()
                notniceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = notniceScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #Cooperate
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "We are going to play another game. This game need two people. Do you want to work with "+ playerOneNameTwo+ " or someone else?", pos=(0,.7), wrapWidth=1.5, color='black')


            optionOne = visual.ImageStim(myWindow, pos= (.5, 0),size= (.23,.45), image= finStimDir + PlayerOneTwo)
            optionTwo = visual.ImageStim(myWindow, pos= (-.5,0), image= finStimDir + 'work_together.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()

            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]

            if response == 'left':
                print("together")

            elif response == 'right':
                print("someone else")

            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #Help
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! "+playerOneNameTwo+" is working to complete a puzzle. It looks like they are missing some pieces. Here are some pieces. Do you want to send any of the pieces to them  or keep them?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'PuzzlePieces.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size= (.23,.45), image= finStimDir + PlayerOnePuzzleTwo)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("give pieces")
                scalePuzzleGive = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleGiveText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to give "+ playerOneNameTwo+" ?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleGiveText.draw()
                scalePuzzleGive.draw()
                optionTwo.draw()
                myWindow.flip()
                GiveScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = GiveScaleChoice)[0]
            elif response == 'right':
                print("keep pieces")
                scalePuzzleKeep = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleKeepText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to keep?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleKeepText.draw()
                scalePuzzleKeep.draw()
                optionTwo.draw()
                myWindow.flip()
                KeepScaleChoice = ['left', 'up', 'right']
                responseKeepScale= event.waitKeys(keyList = KeepScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
        elif questionType==3:
            #Nice
            charText = visual.TextStim(myWindow, text= "Is "+ playerOneNameTwo +" nice or not nice?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'NiceNotNice.png' )
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size = (.23,.45),image= finStimDir + PlayerOneTwo)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("nice")
                scaleNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NiceScale.png')
                scaleNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneNameTwo +" a little nice, nice, or really nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNiceText.draw()
                scaleNice.draw()
                optionTwo.draw()
                myWindow.flip()
                niceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = niceScaleChoice)[0]
            elif response == 'right':
                print("not nice")
                scaleNotNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NotNiceScale.png')
                scaleNotNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneNameTwo+" a little not nice, not nice, or really not nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNotNiceText.draw()
                optionTwo.draw()
                myWindow.flip()
                notniceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = notniceScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #play
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! " + playerOneNameTwo + " is going to play another game. Do you think they will let you play or not let you play?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (.5, -.5), image= finStimDir + 'Play.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,0), size= (.23,.45),image= finStimDir + PlayerOneTwo)
            optionThree = visual.ImageStim(myWindow, pos= (-.5, -.5), image= finStimDir + 'NoPlay.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            optionThree.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
                scalePlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalePlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+playerOneNameTwo+" let you play?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePlayText.draw()
                scalePlay.draw()
                optionTwo.draw()
                myWindow.flip()
                PlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = PlayScaleChoice)[0]
            elif response == 'right':
                print("play")
                scalenoPlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalenoPlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+ playerOneNameTwo+" not play with you?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalenoPlayText.draw()
                scalenoPlay.draw()
                optionTwo.draw()
                myWindow.flip()
                noPlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = noPlayScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #help
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! "+playerOneNameTwo+" is working to complete a puzzle. It looks like they are missing some pieces. Here are some pieces. Do you want to send any of the pieces them or keep them?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'PuzzlePieces.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3),size= (.23,.45), image= finStimDir + PlayerOnePuzzleTwo)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("give pieces")
                scalePuzzleGive = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleGiveText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to give "+ playerOneNameTwo+" ?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleGiveText.draw()
                scalePuzzleGive.draw()
                optionTwo.draw()
                myWindow.flip()
                GiveScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = GiveScaleChoice)[0]
            elif response == 'right':
                print("keep pieces")
                scalePuzzleKeep = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleKeepText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to keep?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleKeepText.draw()
                scalePuzzleKeep.draw()
                optionTwo.draw()
                myWindow.flip()
                KeepScaleChoice = ['left', 'up', 'right']
                responseKeepScale= event.waitKeys(keyList = KeepScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #cooperate
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "We are going to play another game. This game need two people. Do you want to work with "+ playerOneNameTwo+ " or someone else?", pos=(0,.7), wrapWidth=1.5, color='black')


            optionOne = visual.ImageStim(myWindow, pos= (.5, 0), image= finStimDir + PlayerOneTwo)
            optionTwo = visual.ImageStim(myWindow, pos= (-.5,0), image= finStimDir + 'work_together.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()

            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]

            if response == 'left':
                print("together")

            elif response == 'right':
                print("someone else")

            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #MC
            charText = visual.TextStim(myWindow, text= "Did " + participantNameTwo+ " get to play or have to watch?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, 0), size = (.23,.45), image= finStimDir + ParticipantTwo)
            chooseOne= visual.TextStim(myWindow, pos=(-.5, -.5), text= "Play", wrapWidth=1.5, color='black')
            chooseTwo= visual.TextStim(myWindow, pos=(.5, -.5), text= "Watch", wrapWidth=1.5, color='black')
            myBackground.draw()
            charText.draw()
            optionOne.draw()
            chooseOne.draw()
            chooseTwo.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
            else:
                print("watch")
        elif questionType==4:
            #play
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! " + playerOneNameTwo+ " is going to play another game. Do you think they will let you play or not let you play?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (.5, -.5), image= finStimDir + 'Play.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,0),size= (.23,.45), image= finStimDir + PlayerOneTwo)
            optionThree = visual.ImageStim(myWindow, pos= (-.5, -.5), image= finStimDir + 'NoPlay.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            optionThree.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
                scalePlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalePlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+playerOneNameTwo+" let you play?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePlayText.draw()
                scalePlay.draw()
                optionTwo.draw()
                myWindow.flip()
                PlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = PlayScaleChoice)[0]
            elif response == 'right':
                print("play")
                scalenoPlay = visual.TextStim(myWindow, pos=(0,-.5), text = "a little bit              regular amount                a lot", wrapWidth=1.5, color='black')
                scalenoPlayText= visual.TextStim(myWindow, pos = (0,.5), text = "How much will "+ playerOneNameTwo+" not play with you?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalenoPlayText.draw()
                scalenoPlay.draw()
                optionTwo.draw()
                myWindow.flip()
                noPlayScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = noPlayScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #nice
            charText = visual.TextStim(myWindow, text= "Is "+ playerOneNameTwo +" nice or not nice?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'NiceNotNice.png' )
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size = (.23,.45),image= finStimDir + PlayerOneTwo)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("nice")
                scaleNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NiceScale.png')
                scaleNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneNameTwo +" a little nice, nice, or really nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNiceText.draw()
                scaleNice.draw()
                optionTwo.draw()
                myWindow.flip()
                niceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = niceScaleChoice)[0]
            elif response == 'right':
                print("not nice")
                scaleNotNice = visual.ImageStim(myWindow, pos=(0,-.5), image = finStimDir + 'NotNiceScale.png')
                scaleNotNiceText= visual.TextStim(myWindow, pos = (0,.5), text = "Is "+ playerOneNameTwo+" a little not nice, not nice, or really not nice?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scaleNotNiceText.draw()
                optionTwo.draw()
                myWindow.flip()
                notniceScaleChoice = ['left', 'up', 'right']
                responseNiceScale= event.waitKeys(keyList = notniceScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #cooperate
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "We are going to play another game. This game need two people. Do you want to work with "+ playerOneNameTwo+ " or someone else?", pos=(0,.7), wrapWidth=1.5, color='black')


            optionOne = visual.ImageStim(myWindow,size= (.23,.45), pos= (.5, 0), image= finStimDir + PlayerOneTwo)
            optionTwo = visual.ImageStim(myWindow, pos= (-.5,0), image= finStimDir + 'work_together.png')
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()

            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]

            if response == 'left':
                print("together")

            elif response == 'right':
                print("someone else")

            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)

            #help
            myBackground.draw()
            myWindow.flip()
            charText = visual.TextStim(myWindow, text= "Oh look! "+playerOneNameTwo+" is working to complete a puzzle. It looks like they are missing some pieces. Here are some pieces. Do you want to send any of the pieces to them or keep them?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, -.5), image= finStimDir + 'PuzzlePieces.png')
            optionTwo = visual.ImageStim(myWindow, pos= (0,.3), size= (.23,.45), image= finStimDir + PlayerOnePuzzleTwo)
            myBackground.draw()
            optionOne.draw()
            optionTwo.draw()
            charText.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("give pieces")
                scalePuzzleGive = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleGiveText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to give "+ playerOneNameTwo+" ?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleGiveText.draw()
                scalePuzzleGive.draw()
                optionTwo.draw()
                myWindow.flip()
                GiveScaleChoice = ['left', 'up', 'right']
                responseGiveScale= event.waitKeys(keyList = GiveScaleChoice)[0]
            elif response == 'right':
                print("keep pieces")
                scalePuzzleKeep = visual.TextStim(myWindow, pos=(0,-.5), text = "1              2                3", wrapWidth=1.5, color='black')
                scalePuzzleKeepText= visual.TextStim(myWindow, pos = (0,.5), text = "How many pieces do you want to keep?", wrapWidth=1.5, color='black')
                myBackground.draw()
                scalePuzzleKeepText.draw()
                scalePuzzleKeep.draw()
                optionTwo.draw()
                myWindow.flip()
                KeepScaleChoice = ['left', 'up', 'right']
                responseKeepScale= event.waitKeys(keyList = KeepScaleChoice)[0]
            else:
                print('whoops! does not work')
            myBackground.draw()
            myWindow.flip()
            core.wait(1)
            #MC
            charText = visual.TextStim(myWindow, text= "Did " + participantNameTwo + " get to play or have to watch?", pos=(0,.7), wrapWidth=1.5, color='black')
            optionOne = visual.ImageStim(myWindow, pos= (0, 0), size = (.23,.45), image= finStimDir + ParticipantTwo)
            chooseOne= visual.TextStim(myWindow, pos=(-.5, -.5), text= "Play", wrapWidth=1.5, color='black')
            chooseTwo= visual.TextStim(myWindow, pos=(.5, -.5), text= "Watch", wrapWidth=1.5, color='black')
            myBackground.draw()
            charText.draw()
            optionOne.draw()
            chooseOne.draw()
            chooseTwo.draw()
            myWindow.flip()
            choiceResp= ['left', 'right']
            response = event.waitKeys(keyList = choiceResp)[0]
            if response == 'left':
                print("play")
            else:
                print("watch")
Flow
  Routine trial
  Routine introductions
  Routine Game
  Routine questions
  Routine introductions_game2
  Routine GameTwo
  Routine questions2
